PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = Penn Word Memory
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Routines
  Routine instructions
    ImageComponent image
      image = images/instructions1.jpg
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent enter
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine learn_trials
    TextComponent learn_text
      color = $[1.000,1.000,1.000]
      letterHeight = 110
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every repeat] = $learn
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  Routine instructions2
    ImageComponent image_2
      image = images/instructions2.jpg
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent enter_2
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine test_trials
    TextComponent test_text
      color = $[1.000,1.000,1.000]
      letterHeight = 110
      pos = (0,100)
      startVal [time (s)] = 0.0
      text [set every repeat] = $choose
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    ImageComponent buttons_image
      image [set every repeat] = images/buttons.jpg
      pos [set every repeat] = (0, -100)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    KeyboardComponent test_resp
      allowedKeys [set every repeat] = '1','2','3','4'
      correctAns = $corrbest, $corrgood
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text
      letterHeight = 20
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = You have completed the task :)
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = words.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('learn', 'DECREE'), ('choose', 'CONFIDENCE'), ('corrbest', 4), ('corrgood', 3)]),
      OrderedDict([('learn', 'DIRECTION'), ('choose', 'COST'), ('corrbest', 4), ('corrgood', 3)]),
      OrderedDict([('learn', 'EVENT'), ('choose', 'DECREE'), ('corrbest', 1), ('corrgood', 2)]),
      OrderedDict([('learn', 'EXCLUSION'), ('choose', 'DIRECTION'), ('corrbest', 1), ('corrgood', 2)]),
      OrderedDict([('learn', 'FANTASY'), ('choose', 'DISCLOSURE'), ('corrbest', 4), ('corrgood', 3)]),
      OrderedDict([('learn', 'FIGMENT'), ('choose', 'DISTRACTION'), ('corrbest', 4), ('corrgood', 3)]),
      OrderedDict([('learn', 'GENDER'), ('choose', 'EFFORT'), ('corrbest', 4), ('corrgood', 3)]),
      OrderedDict([('learn', 'GREED'), ('choose', 'EGO'), ('corrbest', 4), ('corrgood', 3)]),
      OrderedDict([('learn', 'IMPULSE'), ('choose', 'EVENT'), ('corrbest', 1), ('corrgood', 2)]),
      OrderedDict([('learn', 'INCREMENT'), ('choose', 'EXCLUSION'), ('corrbest', 1), ('corrgood', 2)]),
      OrderedDict([('learn', 'LAW'), ('choose', 'FACT'), ('corrbest', 4), ('corrgood', 3)]),
      OrderedDict([('learn', 'MEMORY'), ('choose', 'FANTASY'), ('corrbest', 1), ('corrgood', 2)]),
      OrderedDict([('learn', 'MORAL'), ('choose', 'FATE'), ('corrbest', 4), ('corrgood', 3)]),
      OrderedDict([('learn', 'NONSENSE'), ('choose', 'FIGMENT'), ('corrbest', 1), ('corrgood', 2)]),
      OrderedDict([('learn', 'OBSESSION'), ('choose', 'FRANCHISE'), ('corrbest', 4), ('corrgood', 3)]),
      OrderedDict([('learn', 'ORIGIN'), ('choose', 'GENDER'), ('corrbest', 1), ('corrgood', 2)])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
    Routine learn_trials
  LoopTerminator trials
  Routine instructions2
  LoopInitiator trials_test loopType="TrialHandler"
    conditionsFile = choose.csv
    loopType = random
    nReps = 1
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    Routine test_trials
  LoopTerminator trials_test
  Routine end
